/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        // "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
        "watchdog-timeout": 0.05 // in seconds
        // , "period": 0.0007 //  since we can't use full broadcast
        // , "port": "udp"
        // , "firewire-protocol": "broadcast-read-write"
    }
    ,
    "arms":
    [
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "27313"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "25976"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "23388"
        }
    ]
}
